<CompuCell3D Revision="20200118" Version="4.1.1">

    <!-- ____________________________SIMULATION PARAMETERS____________________________ -->

    <Metadata>
        <NumberOfProcessors>3</NumberOfProcessors>
        <DebugOutputFrequency>10</DebugOutputFrequency>
        <!-- <NonParallelModule Name="Potts"/> -->
    </Metadata>

    <!-- ____________________________MODEL PARAMETERS____________________________ -->

    <Potts>
        <!-- Basic properties of Potts model -->
        <Dimensions x="200" y="200" z="1"/>   <!--FOR 2D-->
        <!--<Dimensions x="200" y="200" z="200"/>-->  <!-- FOR 3D -->
        <Steps>10000</Steps>
        <NeighborOrder>1</NeighborOrder>
        <Boundary_x>Periodic</Boundary_x>
        <Boundary_y>Periodic</Boundary_y>
        <!--<Boundary_z>Periodic</Boundary_z>--> <!-- FOR 2D: comment out-->

        <!-- The temperature, aka fluctuation amplitude: -->
        <FluctuationAmplitude>
            <FluctuationAmplitudeParameters CellType="Tumor" FluctuationAmplitude="15"/>
            <FluctuationAmplitudeParameters CellType="Collagen" FluctuationAmplitude="0"/>
        </FluctuationAmplitude>
    </Potts>

    <Plugin Name="CellType">
        <!-- Listing all cell types in the simulation -->
        <CellType TypeId="0" TypeName="Medium"/>
        <CellType Freeze="" TypeId="1" TypeName="Collagen"/> <!-- add Freeze="" to disable proteolysis -->
        <CellType TypeId="2" TypeName="Tumor"/>
    </Plugin>

    <Plugin Name="Volume"/> <!-- Parameters set in Python steppable -->

    <Plugin Name="Surface"/> <!-- Parameters in python steppable only work when your call the plugin like this -->

    <!-- ____________________________ADHESION____________________________ -->

    <Plugin Name="Contact">
        <!-- The following values are from Scianna et al.: TM 6.5, TC 4.5, TT 12.0 -->
        <Energy Type1="Tumor" Type2="Medium">6.5</Energy>
        <Energy Type1="Tumor" Type2="Collagen">4.5</Energy>
        <Energy Type1="Tumor" Type2="Tumor">10.0</Energy>

        <!-- I don't know what Scianna et al. do with these. -->
        <!-- Let's make them high so the adhesion is weak -->
        <Energy Type1="Medium" Type2="Medium">20.0</Energy>
        <Energy Type1="Medium" Type2="Collagen">20.0</Energy>
        <Energy Type1="Collagen" Type2="Collagen">20.0</Energy>
        <NeighborOrder>4</NeighborOrder>
    </Plugin>

    <!-- ____________________________CATERPILLAR EFFECT____________________________ -->

    <!-- The constants for the caterpillar (CPT field) movement are of course a bit finetuned, feel free to play with them -->
    <Plugin Name="Chemotaxis">
        <ChemicalField Name="CTP" Source="DiffusionSolverFE">
            <ChemotaxisByType Lambda="20.0" Type="Tumor"/>
        </ChemicalField>
    </Plugin>

    <Steppable Type="DiffusionSolverFE">
        <DiffusionField Name="CTP">
            <DiffusionData>
                <FieldName>CTP</FieldName>
                <GlobalDiffusionConstant>0.00</GlobalDiffusionConstant>
                <GlobalDecayConstant>0.00</GlobalDecayConstant>

                <DoNotDiffuseTo>Collagen</DoNotDiffuseTo>
                <DiffusionCoefficient CellType="Collagen">0.00</DiffusionCoefficient>
                <DiffusionCoefficient CellType="Tumor">0.005</DiffusionCoefficient>
                <DiffusionCoefficient CellType="Medium">0.00</DiffusionCoefficient>

                <DecayCoefficient CellType="Collagen">0.005</DecayCoefficient>
                <DecayCoefficient CellType="Tumor">0.0005</DecayCoefficient>
                <DecayCoefficient CellType="Medium">0.005</DecayCoefficient>

                <!--DoNotDecayIn>Tumor</DoNotDecayIn>
                <DoNotDiffuseTo>Medium</DoNotDiffuseTo-->
            </DiffusionData>

            <SecretionData>
                <SecretionOnContact Type="Tumor" SecreteOnContactWith="Collagen">0.1</SecretionOnContact>
            </SecretionData>
        </DiffusionField>
    </Steppable>

    <!-- ____________________________INITIAL CONDITION____________________________ -->

    <Steppable Type="PIFInitializer">
        <!-- Initial layout of cells using PIFF file. -->
        <PIFName>PIF files/collagen+tumoroid2d.piff</PIFName>   <!--FOR 2D-->
        <!--<PIFName>PIF files/3D/collagen+cell3d.piff</PIFName>-->  <!--FOR 3D-->
    </Steppable>
</CompuCell3D>
